<?xml version='1.0'?>
<model name="dS2cytokines" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="hatakeyama_2003.cellml">
        <component component_ref="ERK" name="ERK"/>
        <component component_ref="MEK" name="MEK"/>
        <component component_ref="RAF" name="RAF"/>
        <component component_ref="Akt" name="Akt"/>
        <component component_ref="RasGDPtoRasGTP" name="RasGDPtoRasGTP"/>
        <component component_ref="PI3K" name="PI3K"/>
    </import>
    <!--
        *******************************************************
        ***         U   N   I   T   S                       ***
        *******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="s"/>
    </component>
    <component name="hCactivating">
        <variable name="time" public_interface="in" units="second"/>
        <variable initial_value="1.4043e-5" name="kf1" units="second_order_rate_constant"/>
        <variable initial_value="0.014043" name="kb1" units="first_order_rate_constant"/>
        <variable initial_value="105.2" name="hC" public_interface="out" units="nm"/>
        <variable initial_value="98" name="dS2" units="nm"/>
        <variable initial_value="0" name="hCdS2" public_interface="out" units="nm"/>
        <variable name="J1" public_interface="out" units="flux"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf1</ci>
                        <ci>hC</ci>
                        <ci>dS2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>hCdS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>dS2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="DAP12">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="J1" public_interface="in" units="flux"/>
        <variable name="hCdS2" public_interface="in" units="nm"/>
        <variable name="J2" units="flux"/>
        <variable name="J3" units="flux"/>
        <variable name="J4" units="flux"/>
        <variable name="J5" units="flux"/>
        <variable name="J6" units="flux"/>
        <variable name="J7" units="flux"/>
        <variable initial_value="1.6521e-5" name="kf2" units="second_order_rate_constant"/>
        <variable initial_value="0.0517365" name="kb2" units="first_order_rate_constant"/>
        <variable initial_value="1.95e-6" name="kf3" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="11.6167e-3" name="kb3" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="7.6167e-3" name="kf4" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="0.0007" name="kb4" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="9.5e-8" name="kf5" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="6e-7" name="kb5" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="0.0007" name="kf6" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="7.6167e-3" name="kb6" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="0.002" name="kf7" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="600" name="DAP12" public_interface="out" units="nm"/>
        <variable initial_value="2083.33" name="plck" units="nm"/>
        <variable initial_value="120000" name="zap70" units="nm"/>
        <variable initial_value="0" name="hCdS2DAP12" public_interface="out" units="nm"/>
        <variable initial_value="0" name="phCdS2DAP12" units="nm"/>
        <variable initial_value="0" name="lck" units="nm"/>
        <variable initial_value="0" name="phCdS2DAP12_zap70" units="nm"/>
        <variable initial_value="0" name="phCdS2DAP12_pzap70" units="nm"/>
        <variable initial_value="0" name="pzap70" public_interface="out" units="nm"/>
        <variable initial_value="0" name="phCdS2DAP12_2_pzap70" public_interface="out" units="nm"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf2</ci>
                        <ci>J1</ci>
                        <ci>DAP12</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb2</ci>
                        <ci>hCdS2DAP12</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf3</ci>
                        <ci>hCdS2DAP12</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb3</ci>
                        <ci>phCdS2DAP12</ci>
                        <ci>lck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf4</ci>
                        <ci>phCdS2DAP12</ci>
                        <ci>zap70</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb4</ci>
                        <ci>phCdS2DAP12_zap70</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf5</ci>
                        <ci>phCdS2DAP12_zap70</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb5</ci>
                        <ci>phCdS2DAP12_pzap70</ci>
                        <ci>lck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf6</ci>
                        <ci>phCdS2DAP12_pzap70</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb6</ci>
                        <ci>phCdS2DAP12</ci>
                        <ci>pzap70</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <times/>
                    <ci>kf7</ci>
                    <ci>phCdS2DAP12_pzap70</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hCdS2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>DAP12</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hCdS2DAP12</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>phCdS2DAP12</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>phCdS2DAP12_zap70</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>phCdS2DAP12_pzap70</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J5</ci>
                        <ci>J6</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pzap70</ci>
                </apply>
                <ci>J6</ci>
            </apply>
        </math>
    </component>
    <component name="TNF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="ShGS" public_interface="in" units="nm"/>
        <variable name="RasGTP" public_interface="in" units="nm"/>
        <variable name="Akt_PIPP" public_interface="in" units="nm"/>
        <variable name="RAF_star" public_interface="in" units="nm"/>
        <variable name="MEKPP" public_interface="in" units="nm"/>
        <variable name="ERKPP_normalised" public_interface="in" units="nm"/>
        <variable name="ERKPP" public_interface="in" units="nm"/>
        <variable initial_value="0.0291491" name="kf31" public_interface="out" units="first_order_rate_constant"/>
        <variable name="J29" units="flux"/>
        <variable initial_value="0" name="TNF" public_interface="out" units="nm"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J29</ci>
                <apply>
                    <times/>
                    <ci>kf31</ci>
                    <ci>ERKPP_normalised</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>TNF</ci>
                </apply>
                <ci>J29</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="hCactivating"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="DAP12"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="TNF"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="PI3K" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="ERK"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="MEK"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="RAF"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="RasGDPtoRasGTP" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="Akt" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="PI3K" component_2="TNF"/>
        <map_variables variable_1="ShGS" variable_2="ShGS"/>
    </connection>
    <connection>
        <map_components component_1="RasGDPtoRasGTP" component_2="TNF"/>
        <map_variables variable_1="RasGTP" variable_2="RasGTP"/>
    </connection>
    <connection>
        <map_components component_1="MEK" component_2="TNF"/>
        <map_variables variable_1="MEKPP" variable_2="MEKPP"/>
    </connection>
    <connection>
        <map_components component_1="RAF" component_2="TNF"/>
        <map_variables variable_1="RAF_star" variable_2="RAF_star"/>
    </connection>
    <connection>
        <map_components component_1="ERK" component_2="TNF"/>
        <map_variables variable_1="ERKPP_normalised" variable_2="ERKPP_normalised"/>
        <map_variables variable_1="ERKPP" variable_2="ERKPP"/>
    </connection>
    <connection>
        <map_components component_1="hCactivating" component_2="DAP12"/>
        <map_variables variable_1="J1" variable_2="J1"/>
        <map_variables variable_1="hCdS2" variable_2="hCdS2"/>
    </connection>
    <connection>
        <map_components component_1="PI3K" component_2="RasGDPtoRasGTP"/>
        <map_variables variable_1="ShGS" variable_2="ShGS"/>
    </connection>
    <connection>
        <map_components component_1="RasGDPtoRasGTP" component_2="RAF"/>
        <map_variables variable_1="RasGTP" variable_2="RasGTP"/>
    </connection>
    <connection>
        <map_components component_1="RAF" component_2="Akt"/>
        <map_variables variable_1="Akt_PIPP" variable_2="Akt_PIPP"/>
    </connection>
</model>
